proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma[5], dend[67]

proc topol() { local i
  connect soma[1](0), soma(0.5)
  connect soma[2](0), soma[1](1)
  connect soma[3](0), soma(0.5)
  connect soma[4](0), soma[3](1)
  connect dend(0), soma[2](1)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), dend[1](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), soma[1](1)
  for i = 18, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  connect dend[22](0), dend[18](1)
  connect dend[23](0), dend[17](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), soma[4](1)
  for i = 27, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  for i = 33, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), dend[33](1)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[35](1)
  connect dend[42](0), dend[32](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), soma(0.5)
  for i = 47, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  connect dend[52](0), dend[46](1)
  for i = 53, 54 connect dend[i](0), dend[i-1](1)
  connect dend[55](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  for i = 61, 62 connect dend[i](0), dend[i-1](1)
  connect dend[63](0), dend[61](1)
  connect dend[64](0), dend[60](1)
  connect dend[65](0), dend[57](1)
  connect dend[66](0), dend[52](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-5.885, 0, 0, 11.77)
	pt3dadd(0, 0, 0, 11.77)
	pt3dadd(5.885, 0, 0, 11.77)
  }
  soma[1] {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-2.69, 2.54, 1.22, 8.07)
	pt3dadd(-6.84, 5.26, 1.54, 3.92)
  }
  soma[2] {pt3dclear()
	pt3dadd(-6.84, 5.26, 1.54, 3.92)
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(-66.35, 149.48, -29.83, 0.67)
	pt3dadd(-66.39, 150.82, -30.76, 0.07)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(-28.39, 197.53, -47.66, 0.37)
	pt3dadd(-27.47, 199.59, -48.04, 1.41)
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  }
}
proc shape3d_4() {
  dend[25] {	pt3dadd(-43.94, -56.17, -21.64, 0.89)
	pt3dadd(-42.91, -57.14, -23.12, 0.96)
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  }
}
proc shape3d_5() {
  dend[34] {	pt3dadd(-59.9, -66.61, -47.93, 0.07)
	pt3dadd(-61.21, -67.27, -47.74, 0.37)
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  }
}
proc shape3d_6() {
  dend[42] {	pt3dadd(17.97, -33.54, -42.58, 1.33)
	pt3dadd(19.76, -34.59, -43.41, 0.52)
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  }
}
proc shape3d_7() {
  dend[48] {	pt3dadd(26.91, 135.4, -71.6, 1.04)
	pt3dadd(26.23, 134.1, -70.99, 0.22)
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  }
}
proc shape3d_8() {
  dend[54] {	pt3dadd(28.67, 106.15, -40.36, 0.3)
	pt3dadd(28.78, 106.84, -40.71, 0.07)
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  }
}
proc shape3d_9() {
  dend[57] {	pt3dadd(16.74, 30.15, -31.04, 0.59)
	pt3dadd(15.86, 28.9, -31.51, 0.37)
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  }
}
proc shape3d_10() {
  dend[62] {	pt3dadd(-111.28, 57.16, -102.63, 0.07)
	pt3dadd(-112.03, 57.6, -103.96, 0.07)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
}

objref all, somatic, basal
proc subsets() { local i
  objref all, somatic, basal
  all = new SectionList()
    for i=0, 4 soma[i] all.append()
    for i=0, 66 dend[i] all.append()

  somatic = new SectionList()
    for i=0, 4 soma[i] somatic.append()

  basal = new SectionList()
    for i=0, 66 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    Ra = 195.97
    insert pas
      g_pas = 0.001
      e_pas = -70
  }
  forsec somatic {
    insert Im
      gbar_Im = 0.082637
    insert Ih
      gbar_Ih = 4.95
    insert NaTs
      gbar_NaTs = 0.00135
    insert Nap
      gbar_Nap = 0.910976
    insert K_P
      gbar_K_P = 2.6915
    insert K_T
      gbar_K_T = 0.6397
    insert SK
      gbar_SK = 0.0677
    insert Kv3_1
      gbar_Kv3_1 = 0.09138
    insert Ca_HVA
      gbar_Ca_HVA = 0.00069
    insert Ca_LVA
      gbar_Ca_LVA = 0.0029558
    insert CaDynamics
      gamma_CaDynamics = 0.00427
      decay_CaDynamics = 73.3
      depth_CaDynamics = 0.1
      minCai_CaDynamics = 0.0001
    insert pas
      g_pas = 0.000437
      e_pas = -70
  }
}
access soma

celldef()
